PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trail1
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Routines
  Routine Welcome_Screen
    TextComponent text_Welcome_Message
      color = White
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Wecome to the experiment


        Press SPACEBAR to start the experiment
    KeyboardComponent key_Welcome
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine GoodBye_Screen
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Thank You
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    KeyboardComponent key_Goodbye
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank100
    TextComponent text_Blank100
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Empty
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  Routine STIMULI
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Number
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Flow
  Routine Welcome_Screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimuli_Numbers.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Empty': None, 'Number': 1},
      {'Empty': None, 'Number': 2},
      {'Empty': None, 'Number': 3},
      {'Empty': None, 'Number': 4},
      {'Empty': None, 'Number': 5},
      {'Empty': None, 'Number': 9}]
    Routine Blank100
    Routine STIMULI
  LoopTerminator trials
  Routine GoodBye_Screen
