PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trail1
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Routines
  Routine Welcome_Screen
    TextComponent text_Welcome_Message
      color = White
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Wecome to the experiment


        Press SPACEBAR to start the experiment
    KeyboardComponent key_Welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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  Routine GoodBye_Screen
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Thank You
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  Routine Blank100
    TextComponent text_Blank100
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Empty
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import time
        import tobii_research as tr
        from msvcrt import getch
        import sys
        from psychopy import data

        # ref code used
        # http://devtobiipro.azurewebsites.net/tobii.research/python/reference/1.8.0.32-alpha-g5b38a1f5/gaze_data_8py-example.html

        # reading time in sec
        timer = 1000
        # reading frequency per sec
        frequency = 2
        global_gaze_data = None
        # in second
        fixation_threshhold = 0.5
        # minimum
        fixation_tolerance = 0.0005

        textId = 1

        def initTobii():
            current_eye_tracker = tr.find_all_eyetrackers()[0]
            # print(current_eye_tracker)
            return current_eye_tracker


        def getTimeStamp():
            return int((time.time() - start_time) * 1000)

        def gaze_data_callback(gaze_data):
            global global_gaze_data
            global_gaze_data = gaze_data

        start_time = time.time()
        eyetracker = initTobii();
        eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
        print ("tobii inilialized")
        print(getTimeStamp())

        fileName = "expData/"+expInfo["id"]+"_"+expInfo["participant"]
        #extraInformation = {'name': expInfo["name"], 'id': expInfo["id"]}
        expData = data.ExperimentHandler(name='Eye swiping',
                        version="1.0.0",
                        #extraInfo=extraInformation,
                        extraInfo=None,
                        dataFileName=fileName)
      Begin Routine:
        start_time = time.time()
        allGazeData = []
      Each Frame:
        print(global_gaze_data)
        time.sleep(1/frequency)
        print(getTimeStamp())

        allGazeData.append(global_gaze_data)
      End Routine:
        #End Routine
        expData.addData("Gaze Data "+str(textId), allGazeData)
        textId=textId+1
  Routine STIMULI
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Number
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        import time
        import tobii_research as tr
        from msvcrt import getch
        import sys
        from psychopy import data

        # ref code used
        # http://devtobiipro.azurewebsites.net/tobii.research/python/reference/1.8.0.32-alpha-g5b38a1f5/gaze_data_8py-example.html

        # reading time in sec
        timer = 3000
        # reading frequency per sec
        frequency = 2
        global_gaze_data = None
        # in second
        fixation_threshhold = 0.5
        # minimum
        fixation_tolerance = 0.0005

        textId = 1

        def initTobii():
            current_eye_tracker = tr.find_all_eyetrackers()[0]
            # print(current_eye_tracker)
            return current_eye_tracker


        def getTimeStamp():
            return int((time.time() - start_time) * 1000)

        def gaze_data_callback(gaze_data):
            global global_gaze_data
            global_gaze_data = gaze_data

        start_time = time.time()
        eyetracker = initTobii();
        eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_data_callback, as_dictionary=True)
        print ("tobii inilialized")
        print(getTimeStamp())

        fileName = "expData/"+expInfo["id"]+"_"+expInfo["participant"]
        #extraInformation = {'name': expInfo["name"], 'id': expInfo["id"]}
        expData = data.ExperimentHandler(name='Eye swiping',
                        version="1.0.0",
                        #extraInfo=extraInformation,
                        extraInfo=None,
                        dataFileName=fileName)
      Begin Routine:
        start_time = time.time()
        allGazeData = []
      Each Frame:
        print(global_gaze_data)
        time.sleep(1/frequency)
        print(getTimeStamp())

        allGazeData.append(global_gaze_data)
      End Experiment:
        eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_data_callback)
      End Routine:
        expData.addData("Gaze Data "+str(textId), allGazeData)
        textId=textId+1
Flow
  Routine Welcome_Screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimuli_Numbers.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Empty': None, 'Number': 1},
      {'Empty': None, 'Number': 2},
      {'Empty': None, 'Number': 3},
      {'Empty': None, 'Number': 4},
      {'Empty': None, 'Number': 5},
      {'Empty': None, 'Number': 9}]
    Routine Blank100
    Routine STIMULI
  LoopTerminator trials
  Routine GoodBye_Screen
